WorkflowBuilder(Version=2.8.1)
AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=JSON, Directory=..\local\Subjects, DataSchema=aind_behavior_session_model.json)
-> AsyncSubject SubjectSchemaPath

AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=JSON, Directory=..\local\Rigs, DataSchema=aind_behavior_rig_model.json)
-> AsyncSubject RigSchemaPath

AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=JSON, Directory=..\local\TaskLogic, DataSchema=aind_behavior_task_logic_model.json)
-> AsyncSubject TaskLogicSchemaPath

GroupWorkflow SessionStartTrigger
    SubscribeSubject TaskRunningState
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject StartLogging
    -> Delay(DueTime=PT2S)
    -> ReplaySubject StartExperiment(BufferSize=nil)
    -> Take(Count=1) => #5
    SubscribeSubject TaskRunningState
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #9
    #5, #9 -> Concat
    -> Take(Count=2)
    -> Last
    -> Unit
    -> MulticastSubject EndExperiment
    -> WorkflowOutput

GroupWorkflow Settings
    SubscribeSubject SubjectSchemaPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=..\local\Subjects\bci_no_movement_session.json)
    -> BciNoMovementDataSchema.BciNoMovementSession.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.BciNoMovementSession.BciNoMovementSession>)
    -> Take(Count=1)
    -> BehaviorSubject SubjectSchema

    SubscribeSubject RigSchemaPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=..\local\Rigs\bci_no_movement_rig.json)
    -> BciNoMovementDataSchema.BciNoMovementRig.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.BciNoMovementRig.BciNoMovementRig>)
    -> Take(Count=1)
    -> BehaviorSubject RigSchema

    SubscribeSubject TaskLogicSchemaPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=..\local\TaskLogic\bci_no_movement_task_logic.json)
    -> BciNoMovementDataSchema.BciNoMovementTask.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.BciNoMovementTask.BciNoMovementTaskLogic>)
    -> Take(Count=1)
    -> BehaviorSubject TaskLogicSchema

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:/Data/, Subject=test-subject, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=BciActiveControl.BaselineThreshold)
    -> BehaviorSubject BciBaselineThreshold

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=NoMovementPassiveControl.BaselineThreshold)
    -> BehaviorSubject NoMovementBaselineThreshold

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=BciActiveControl.Gain)
    -> BehaviorSubject BciGain

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=NoMovementPassiveControl.Gain)
    -> BehaviorSubject PassiveGain

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=Skip2pHandshake)
    -> BehaviorSubject Skip2pHandshake
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Skip2pHandshake)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RngSeed) => #41
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1000000)
    -> Bonsai.Numerics.Distributions.Sample => #44
    #41, #44 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform RandomizeRng?
      Expression: Item1 == 0 ? Item1 : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=0)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

GroupWorkflow ZMQ
    SubscribeSubject SoftwareEvent
    -> AllenNeuralDynamics.Core.Logging.SerializeToJson => #1
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Networking.ZmqPublisher)
    -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #4
    #1, #4 -> Bonsai.ZeroMQ.Publisher(ConnectionString=@tcp://localhost:5556, Topic=bci-no-movement)
    -> WorkflowOutput

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Networking.ZmqSubscriber)
    -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic))
    -> Bonsai.ZeroMQ.Subscriber(ConnectionString=@tcp://localhost:5557, Topic=bci-no-movement)
    -> MemberSelector(Selector=Last)
    -> Bonsai.ZeroMQ.ConvertToString

GroupWorkflow Validation
    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> Take(Count=1)
    -> AsyncSubject Repository
    -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
    -> BitwiseNot => #4
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=AllowDirtyRepo)
    -> BitwiseNot => #7
    #4, #7 -> Zip
    -> BitwiseAnd
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Discard or stash changes first.")

    SubscribeSubject RigSchema
    -> Condition BothHasValue
        WorkflowInput Source1
        -> MemberSelector(Selector="Camera1,Camera0")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it.Item1 == null) or (it.Item2 == null)
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector="Camera0.FrameRate,Camera1.FrameRate")
    -> Equal
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Camera frame rates must match!")

    SubscribeSubject RigSchema
    -> MemberSelector(Selector="Camera0.FrameRate,Camera0.Exposure")
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: ((1.0 / Item1) * 1000000) < Item2 + 500
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Camera0 Fps and Exposure not compatible.")

    SubscribeSubject RigSchema
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Camera1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == Null
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector="Camera0.FrameRate,Camera1.Exposure")
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: ((1.0 / Item1) * 1000000) < Item2 + 500
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Camera1 Fps and Exposure not compatible.")

GroupWorkflow Init
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent

    BooleanProperty(Value=false)
    -> BehaviorSubject TaskRunningState

Annotation PinOut
  Text:
    - DO0 -> Cameras
    - DO1 -> Speaker
    - DO2 -> MicroscopeStart
    - DO3 -> MicroscopeStop
    - SUPPLY1 -> Valve
    - DIPort1 -> Lickometer
    - DI0 -> MicroscopeArmed
    - Manipulator steps DIO0
-> GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        Annotation PinOut
          Text:
            | Function | HarpBehavior Pin | Notes |
            | --- | ----------- | ----------- |
            | Camera Trigger | DO0 |  |
            | Water Valve | Port0 Supply |  Use a poke breakout |
            | Lickometer | Port0 DI |  Use a poke breakout |
            | Encoder B | Port2 DIO | Use a poke breakout |
            | Encoder A | Port2 DI | Use a poke breakout |
            | Thermistor | ADC0 |  |
            | Pressure Sensor | ADC1 |  |
            | Photodiode | DI3 |  |
            | Servo Motor | DO2 |  |
            | Audio Buzzer | DO1 |  |
        -> GroupWorkflow HarpBehavior
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpBehaviorCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpBehavior.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
            -> PublishSubject HarpBehaviorEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
            -> PublishSubject HarpBehaviorHeartBeat

            SubscribeSubject HarpBehaviorHeartBeat => #8
            SubscribeSubject StartExperiment => #9
            #8, #9 -> Zip => #10
            Annotation ForceRegisterDump(Text="") => #11
            #10, #11 -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> PublishSubject HarpTimestampSource

            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0 Camera1"))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            GroupWorkflow CameraControl
                SubscribeSubject HarpBehaviorHeartBeat
                -> Take(Count=1)
                -> Delay(DueTime=PT2S)
                -> BooleanProperty(Value=true)
                -> MulticastSubject CameraState

                BehaviorSubject<System.Boolean> CameraState => #5
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #7
                #5 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #10
                #7, #10 -> Merge
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject StartLogging
                -> Take(Count=1)
                -> BooleanProperty(Value=false)
                -> MulticastSubject CameraState

                SubscribeSubject StartExperiment
                -> Take(Count=1)
                -> BooleanProperty(Value=true)
                -> MulticastSubject CameraState

                SubscribeSubject EndExperiment
                -> Take(Count=1)
                -> BooleanProperty(Value=false)
                -> MulticastSubject CameraState

            GroupWorkflow WaterValve
                SubscribeSubject HarpBehaviorHeartBeat => #0
                Annotation Valve+Speaker(Text="") => #1
                #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="SupplyPort0 SupplyPort1 DO1 DO2 DO3"))
                -> Take(Count=1)
                -> MulticastSubject HarpBehaviorCommands

                BehaviorSubject<System.Double> ValveOpenTimeMs
                -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort1)
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject TaskLogicSchema
                -> MemberSelector(Selector=ValveOpenTime)
                -> Multiply(Operand=DoubleProperty(Value=1000))
                -> MulticastSubject ValveOpenTimeMs

                BehaviorSubject<System.Reactive.Unit> TriggerValve
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
                -> MulticastSubject HarpBehaviorCommands
                -> WorkflowOutput

            GroupWorkflow Lickometer
                SubscribeSubject HarpBehaviorEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #2
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> DistinctUntilChanged => #6
                #6, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Seconds)
                -> PublishSubject LickEvent
                -> WorkflowOutput

                SubscribeSubject HarpBehaviorEvents
                -> Take(Count=1)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePokeInputFilterPayload(PokeInputFilter=1))
                -> MulticastSubject HarpBehaviorCommands

            GroupWorkflow Adc
                SubscribeSubject HarpBehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
                -> PublishSubject AnalogData

                SubscribeSubject AnalogData
                -> MemberSelector(Selector="Value.AnalogInput0,Seconds")
                -> Bonsai.Harp.CreateTimestamped
                -> PublishSubject BciSignal

            GroupWorkflow ManipulatorInput
                SubscribeSubject HarpBehaviorEvents

                SubscribeSubject HarpBehaviorEvents
                -> Take(Count=1)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePortDIODirectionPayload(PortDIODirection=None))
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject HarpBehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent) => #6
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO0))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> DistinctUntilChanged => #10
                #10, #6 -> WithLatestFrom
                -> MemberSelector(Selector="Item1,Item2.Seconds")
                -> Bonsai.Harp.CreateTimestamped
                -> BehaviorSubject MotorDigitalInputState

            GroupWorkflow 2pHandShake
                SubscribeSubject HarpBehaviorHeartBeat
                -> Take(Count=1) => #1
                ExternalizedMapping(Value(DisplayName=PulseDurationMs)) => #2
                #1, #2 -> IntProperty(Value=10) => #3
                -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2) => #4
                #3 -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO3) => #5
                #4, #5 -> Merge
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject HarpBehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #9
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> DistinctUntilChanged => #13
                #13, #9 -> WithLatestFrom
                -> MemberSelector(Selector="Item1,Item2.Seconds")
                -> Bonsai.Harp.CreateTimestamped
                -> BehaviorSubject MicroscopeArmed

                BehaviorSubject<System.Reactive.Unit> MicroscopeStart
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
                -> MulticastSubject HarpBehaviorCommands

                BehaviorSubject<System.Reactive.Unit> MicroscopeStop
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
                -> MulticastSubject HarpBehaviorCommands

                Unit
                -> Take(Count=1)
                -> MulticastSubject MicroscopeStop

                SubscribeSubject HarpBehaviorHeartBeat
                -> Take(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Harp.Behavior.CreateMessage(MessageType=Read, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
                -> MulticastSubject HarpBehaviorCommands

            GroupWorkflow Buzzer
                BehaviorSubject<System.Int32> AudioTrigger => #0
                Annotation TrialStart(Text="") => #1
                #0, #1 -> IncludeWorkflow(Path=Extensions\TriggerTone.bonsai, ToneId=1, Frequency=500, DurationMs=100) => #2
                Annotation Reward(Text="") => #3
                #0, #3 -> IncludeWorkflow(Path=Extensions\TriggerTone.bonsai, ToneId=2, Frequency=100, DurationMs=20) => #4
                #2, #4 -> Merge
                -> WorkflowOutput

                GroupWorkflow InitialSettings => #7
                    SubscribeSubject HarpBehaviorHeartBeat
                    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
                    -> Take(Count=1)
                    -> MulticastSubject HarpBehaviorCommands
                SubscribeSubject HarpBehaviorHeartBeat
                -> Take(Count=1) => #9
                #7, #9 -> SubscribeWhen

            FloatProperty(Value=1000)
            -> Take(Count=1)
            -> AsyncSubject BciSamplingRate

        Annotation(Text="")
        -> GroupWorkflow HarpLoadCells
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpLoadCellsCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpLoadCell.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.LoadCells.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM7)
            -> PublishSubject HarpLoadCellsEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
            -> PublishSubject HarpLoadCellsHeartBeat

            SubscribeSubject HarpLoadCellsHeartBeat => #8
            SubscribeSubject StartExperiment => #9
            #8, #9 -> Zip => #10
            Annotation ForceRegisterDump(Text="") => #11
            #10, #11 -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> Take(Count=1)
            -> MulticastSubject HarpLoadCellsCommands

            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateEnableEventsPayload(EnableEvents="LoadCellData DigitalInput SyncOutput"))
            -> Take(Count=1)
            -> MulticastSubject HarpLoadCellsCommands

            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateAcquisitionStatePayload(AcquisitionState=Enabled))
            -> Take(Count=1)
            -> MulticastSubject HarpLoadCellsCommands

            FloatProperty(Value=1000)
            -> Take(Count=1)
            -> AsyncSubject MovementSignalSamplingRate

            SubscribeSubject HarpLoadCellsEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=33, PayloadType=TimestampedS16, IsArray=true))
            -> PublishSubject LoadCellsData

            IntProperty(Value=0) => #30
            IntProperty(Value=0) => #31
            #30, #31 -> Zip

            BehaviorSubject<System.Tuple(System.Int32,System.Int32)> OffsetLoadCellChannel
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(Item1  as Channel, Item2 as Offset)
            -> Condition => #35
                WorkflowInput Source1
                -> MemberSelector(Selector=Channel)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it > 0) and (it < 8)
                -> WorkflowOutput
            -> MemberSelector(Selector=Channel)
            -> Bonsai.Scripting.Expressions.ExpressionTransform GetRegisterNumber => #37
              Expression: it + 48
            #35 -> MemberSelector(Selector=Offset)
            -> Bonsai.Dsp.Rescale(Min=-255, Max=255, RangeMin=255, RangeMax=255, RescaleType=Clamp) => #39
            #37, #39 -> Zip
            -> InputMapping(Selector=Item1, Address(Selector=Item1), Value(Selector=Item2))
            -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=55, PayloadType=S16, Value=255))
            -> MulticastSubject HarpLoadCellsCommands

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Operation.LoadCellOffset)
            -> Merge
            -> ElementIndex => #47
            -> MemberSelector(Selector=Index) => #48
            #47 -> MemberSelector(Selector=Value) => #49
            #48, #49 -> Zip
            -> MulticastSubject OffsetLoadCellChannel => #51
            SubscribeSubject HarpLoadCellsEvents
            -> Take(Count=1) => #53
            #51, #53 -> SubscribeWhen

        Annotation(Text="")
        -> GroupWorkflow HarpTimestampGenerator3
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpClkGenCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpClock.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM9)
            -> PublishSubject HarpClkGenEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
            -> PublishSubject HarpClkGenHeartBeat

            SubscribeSubject HarpClkGenHeartBeat => #8
            SubscribeSubject StartExperiment => #9
            #8, #9 -> Zip => #10
            Annotation ForceRegisterDump(Text="") => #11
            #10, #11 -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> Take(Count=1)
            -> MulticastSubject HarpClkGenCommands

    GroupWorkflow Cameras
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera0.FrameRate)
        -> Take(Count=1)
        -> AsyncSubject CameraFrameRate

        SubscribeSubject CameraFrameRate
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #9
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> Condition => #13
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #9 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject CameraTriggers

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera0)
        -> PropertyMapping
          ExposureTime(Selector=Exposure)
          Gain(Selector=Gain)
          Binning(Selector=Binning)
          SerialNumber(Selector=SerialNumber)
          ColorProcessing(Selector=ColorProcessing)
        -> BciSpinnakerCapture(Index=nil, SerialNumber=23381093, ColorProcessing=Default, ExposureTime=2000, Gain=0, Binning=1, Gamma=0.4, ImageSize(Width=1420, Height=1080)) => #20
        SubscribeSubject CameraTriggers => #21
        #20, #21 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject Camera0FrameEvent

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera1)
        -> PropertyMapping
          ExposureTime(Selector=Exposure)
          Gain(Selector=Gain)
          Binning(Selector=Binning)
          SerialNumber(Selector=SerialNumber)
          ColorProcessing(Selector=ColorProcessing)
        -> BciSpinnakerCapture(Index=nil, SerialNumber=MISSING, ColorProcessing=Default, ExposureTime=1000, Gain=0, Binning=1, Gamma=0.4, ImageSize(Width=1420, Height=1080)) => #28
        SubscribeSubject CameraTriggers => #29
        #28, #29 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject Camera1FrameEvent => #32
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera1)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #35
        #32, #35 -> SubscribeWhen

    GroupWorkflow Manipulator
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=ZaberManipulator)
        -> PropertyMapping(PortName(Selector=ComPort))
        -> AllenNeuralDynamics.Zaber.CreateZaberDevice(Name=ZaberMotor, PortName=COM10)
        -> BehaviorSubject Manipulator

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=ZaberManipulator.GenericCommands)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Count)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Merge
        -> SelectMany SendMessages
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Msg

            SubscribeSubject Msg
            -> Condition NotHasAxis?
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis)
                -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> WorkflowOutput
            -> MemberSelector(Selector=Command)
            -> AllenNeuralDynamics.Zaber.GenericCommand(Device=0, Axis=nil) => #6
            SubscribeSubject Msg
            -> Condition HasAxis?
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis)
                -> Equal(Operand=IntProperty(Value=0))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Command) => #9
            SubscribeSubject Msg
            -> Condition HasAxis?
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis)
                -> Equal(Operand=IntProperty(Value=0))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Axis)
            -> PropertyMapping(Axis) => #13
            #9, #13 -> AllenNeuralDynamics.Zaber.GenericCommand(PortName=ZaberMotor, Device=0, Axis=1) => #14
            #6, #14 -> Merge
            -> WorkflowOutput
        -> BehaviorSubject ManipulatorResponses => #10
        SubscribeSubject Manipulator
        -> MemberSelector(Selector=IsOpen) => #12
        #10, #12 -> SubscribeWhen

        BehaviorSubject<System.Reactive.Unit> HomingRoutine
        -> CreateObservable HomingRoutine
            IntProperty(Value=0) => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator)
            -> MemberSelector(Selector=ZAxis)
            -> PropertyMapping(Device(Selector=DeviceIndex), Axis(Selector=AxisIndex)) => #4
            #0, #4 -> AllenNeuralDynamics.Zaber.Home(PortName=ZaberMotor, Device=0, Axis=nil) => #5
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator)
            -> MemberSelector(Selector=ZAxis)
            -> PropertyMapping(Device(Selector=DeviceIndex), Axis(Selector=AxisIndex)) => #9
            #5, #9 -> AllenNeuralDynamics.Zaber.WaitUntilIdle(PortName=ZaberMotor, Device=0, Axis=nil)
            -> Take(Count=1)
            -> WorkflowOutput

            IntProperty(Value=0) => #13
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator)
            -> MemberSelector(Selector=XAxis)
            -> PropertyMapping(Device(Selector=DeviceIndex), Axis(Selector=AxisIndex)) => #17
            #13, #17 -> AllenNeuralDynamics.Zaber.Home(PortName=ZaberMotor, Device=0, Axis=nil) => #18
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator)
            -> MemberSelector(Selector=XAxis)
            -> PropertyMapping(Device(Selector=DeviceIndex), Axis(Selector=AxisIndex)) => #22
            #18, #22 -> AllenNeuralDynamics.Zaber.WaitUntilIdle(PortName=ZaberMotor, Device=0, Axis=nil)
            -> Take(Count=1)
        -> Switch
        -> BooleanProperty(Value=true)
        -> BehaviorSubject IsHomed
        -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
        -> MulticastSubject Force3dManipulatorPosition

        BooleanProperty(Value=true)
        -> BehaviorSubject ParkState

        SubscribeSubject ParkState => #23
        -> AllenNeuralDynamics.Zaber.Park(PortName=ZaberMotor, Device=0, Axis=nil) => #24
        #23 -> AllenNeuralDynamics.Zaber.Park(PortName=ZaberMotor, Device=1, Axis=nil) => #25
        #24, #25 -> Zip

        GroupWorkflow DetermineManipulatorAxis
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator)
            -> MemberSelector(Selector=SpoutAxis)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: byte(it)
            -> Condition XAxis
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
                -> WorkflowOutput
            -> GroupWorkflow GetX => #5
                WorkflowInput Source1 => #0
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=ZaberManipulator.XAxis) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                -> StringProperty(Value=X) => #5
                #5, #4 -> Zip
                -> WorkflowOutput
            #3 -> Condition YAxis
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
                -> WorkflowOutput
            -> GroupWorkflow GetY => #7
                WorkflowInput Source1 => #0
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=ZaberManipulator.YAxis) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                -> StringProperty(Value=Y) => #5
                #5, #4 -> Zip
                -> WorkflowOutput
            #3 -> Condition ZAxis
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=3))
                -> WorkflowOutput
            -> GroupWorkflow GetZ => #9
                WorkflowInput Source1 => #0
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=ZaberManipulator.ZAxis) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                -> StringProperty(Value=Y) => #5
                #5, #4 -> Zip
                -> WorkflowOutput
            #5, #7, #9 -> Merge
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject ManipulatorSpoutAxis

        BehaviorSubject<System.Reactive.Unit> StopZaber => #30
        -> AllenNeuralDynamics.Zaber.Stop(PortName=ZaberMotor, Device=0, Axis=nil) => #31
        #30 -> AllenNeuralDynamics.Zaber.Stop(PortName=ZaberMotor, Device=1, Axis=nil) => #32
        #31, #32 -> Zip

        GroupWorkflow GoTo3dPosition => #34
            BehaviorSubject<OpenCV.Net.Point3d> Force3dManipulatorPosition => #0
            -> MemberSelector(Selector=X) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator.XAxis)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #4
            #1, #4 -> AllenNeuralDynamics.Zaber.MoveAbsolute => #5
              PortName=ZaberMotor
              Device=0
              Axis=1
              Velocity=nil
              Acceleration=nil
              Units=Length_Millimetres
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            #0 -> MemberSelector(Selector=Y) => #6
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator.YAxis)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #9
            #6, #9 -> AllenNeuralDynamics.Zaber.MoveAbsolute => #10
              PortName=ZaberMotor
              Device=0
              Axis=2
              Velocity=nil
              Acceleration=nil
              Units=Length_Millimetres
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            #0 -> MemberSelector(Selector=Z) => #11
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=ZaberManipulator.ZAxis)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #14
            #11, #14 -> AllenNeuralDynamics.Zaber.MoveAbsolute => #15
              PortName=ZaberMotor
              Device=1
              Axis=1
              Velocity=nil
              Acceleration=nil
              Units=Length_Millimetres
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            #5, #10, #15 -> Zip
            -> WorkflowOutput
        SubscribeSubject IsHomed
        -> Condition => #36
            WorkflowInput Source1
            -> WorkflowOutput
        #34, #36 -> SubscribeWhen

        BehaviorSubject<System.Single> MoveSpoutAbsolute => #38
        SubscribeSubject ManipulatorSpoutAxis
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #41
        #38, #41 -> AllenNeuralDynamics.Zaber.MoveAbsolute
          PortName=ZaberMotor
          Device=0
          Axis=1
          Velocity=nil
          Acceleration=nil
          Units=Length_Millimetres
          VelocityUnits=Velocity_MillimetresPerSecond
          AccelerationUnits=Acceleration_MillimetresPerSecondSquared
        -> PublishSubject SpoutPositionInstruction => #43
        SubscribeSubject IsHomed
        -> Condition => #45
            WorkflowInput Source1
            -> WorkflowOutput
        #43, #45 -> SubscribeWhen

GroupWorkflow OperationControl
    GroupWorkflow LoadCellProcessing
        SubscribeSubject LoadCellsData => #0
        -> MemberSelector(Selector=Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Operation.LoadCellIndex)
        -> PropertyMapping(Value) => #4
        #1, #4 -> Index(Operand=IntProperty(Value=0)) => #5
        #0 -> MemberSelector(Selector=Seconds) => #6
        #5, #6 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject LoadCellData

        SubscribeSubject LoadCellData => #10
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToDouble => #12
          Expression: double(it)
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=NoMovementPassiveControl)
        -> MemberSelector(Selector=LowPassCutOff)
        -> PropertyMapping(Cutoff1) => #16
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=NoMovementPassiveControl)
        -> MemberSelector(Selector=HighPassCutOff)
        -> PropertyMapping(Cutoff2) => #20
        #12, #16, #20 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=50, Cutoff2=0.001, KernelLength=60, FilterType=BandPass)
        -> Bonsai.Dsp.Abs => #22
        #10 -> MemberSelector(Selector=Seconds) => #23
        #22, #23 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject MovementSignal

    GroupWorkflow BciProcessing
        SubscribeSubject BciSignal => #0
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform AdcUnitsToVoltage => #2
          Expression: ((it * 5.0) / 3972.0)
        #0 -> MemberSelector(Selector=Seconds) => #3
        #2, #3 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject PostBciSignal

    GroupWorkflow BciModeToggling
        BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject BciModeEnabled

        SubscribeSubject BciModeEnabled => #3
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #6
        #3 -> Condition => #7
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=BciActiveControl.Gain) => #9
        #7, #9 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #11
        #6, #11 -> Merge
        -> MulticastSubject BciGain

        SubscribeSubject BciModeEnabled => #14
        -> BitwiseNot
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=NoMovementPassiveControl.Gain) => #18
        #16, #18 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #20
        #14 -> Condition => #21
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=BciPassiveControl.Gain) => #23
        #21, #23 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #25
        #20, #25 -> Merge
        -> MulticastSubject PassiveGain

        SubscribeSubject BciGain
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=BciGain)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PassiveGain
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PassiveGain)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject BciModeEnabled
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=BciModeEnabled)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow SpoutControl => #3
        BehaviorSubject<System.Double> SpoutAddDisplacement

        BehaviorSubject<System.Double> SpoutGoToPosition
        -> CreateObservable Accumulate
            WorkflowInput<System.Double> Source1
            -> Take(Count=1)
            -> AsyncSubject InitialPosition

            SubscribeSubject InitialPosition
            -> Take(Count=1) => #4
            SubscribeSubject SpoutAddDisplacement
            -> Skip(Count=1) => #6
            SubscribeSubject InitialPosition => #7
            #6, #7 -> Scan => #8
                WorkflowInput Source1
                -> MemberSelector(Selector="Accumulation,Value")
                -> Add
                -> WorkflowOutput
            #4, #8 -> Concat
            -> WorkflowOutput
        -> Switch
        -> MulticastSubject MoveSpoutAbsolute

        Unit
        -> MulticastSubject GoToInitialPosition

        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=ManipulatorResetPosition) => #8
        SubscribeSubject ManipulatorSpoutAxis => #9
        #8, #9 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
          Expression:
            new(
            Item1 as ResetPosition,
            Item2 as ManipulatorSpoutAxis)
        -> Condition X
            WorkflowInput Source1
            -> MemberSelector(Selector=ManipulatorSpoutAxis)
            -> MemberSelector(Selector=Item1) => #2
            ExternalizedMapping(Value) => #3
            #2, #3 -> Equal(Operand=StringProperty(Value=X))
            -> WorkflowOutput
        -> MemberSelector(Selector=ResetPosition.X) => #13
        #11 -> Condition Y
            WorkflowInput Source1
            -> MemberSelector(Selector=ManipulatorSpoutAxis)
            -> MemberSelector(Selector=Item1) => #2
            ExternalizedMapping(Value) => #3
            #2, #3 -> Equal(Operand=StringProperty(Value=Y))
            -> WorkflowOutput
        -> MemberSelector(Selector=ResetPosition.Y) => #15
        #11 -> Condition Z
            WorkflowInput Source1
            -> MemberSelector(Selector=ManipulatorSpoutAxis)
            -> MemberSelector(Selector=Item1) => #2
            ExternalizedMapping(Value) => #3
            #2, #3 -> Equal(Operand=StringProperty(Value=Z))
            -> WorkflowOutput
        -> MemberSelector(Selector=ResetPosition.Z) => #17
        #13, #15, #17 -> Merge
        -> BehaviorSubject ClosePosition

        SubscribeSubject ClosePosition => #20
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=FarPositionOffset)
        -> Bonsai.Dsp.Abs => #23
        #20, #23 -> CombineLatest
        -> Subtract
        -> BehaviorSubject FarPosition

        BehaviorSubject<System.Reactive.Unit> GoToInitialPosition => #27
        SubscribeSubject FarPosition => #28
        #27, #28 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject SpoutGoToPosition
    SubscribeSubject Manipulator
    -> MemberSelector(Selector=IsOpen) => #5
    #3, #5 -> SubscribeWhen

GroupWorkflow TaskLogic => #14
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=InterTrialInterval)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.5S, Period=PT0S)
    -> SelectMany SetPreTrial
        WorkflowInput Source1
        -> Unit
        -> Take(Count=1)
        -> MulticastSubject GoToInitialPosition
        -> WorkflowOutput
    -> SelectMany CheckBaseline => #6
        GroupWorkflow MovementBaseline
            SubscribeSubject MovementSignal => #0
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject NoMovementBaselineThreshold
            -> PropertyMapping(Value) => #3
            #1, #3 -> LessThan(Operand=DoubleProperty(Value=1000))
            -> DistinctUntilChanged => #5
            #0 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #8
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=NoMovementTimeBeforeTrial)
            -> PropertyMapping(TimeBelowThreshold) => #11
            #8, #11 -> CreateObservable WaitBaseline
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject PostBciSignal
                -> MemberSelector(Selector=Seconds) => #4
                SubscribeSubject This
                -> MemberSelector(Selector=Seconds) => #6
                #4, #6 -> CombineLatest
                -> Subtract => #8
                ExternalizedMapping(Value(DisplayName=TimeBelowThreshold)) => #9
                #8, #9 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject This
                -> MemberSelector(Selector=Value) => #14
                #12, #14 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Switch => #13
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=NoMovementTimeBeforeTrial)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> Condition => #17
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #17 -> Merge
            -> WorkflowOutput
        -> Condition BothBelow? => #1
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SuccessfulBaseline)
        -> MulticastSubject SoftwareEvent => #3
        #3, #1 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=CheckBaseline)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvent
    -> Condition WaitForMicroscope
        WorkflowInput Source1 => #0
        SubscribeSubject Skip2pHandshake
        -> BitwiseNot => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> SelectMany StopMicroscope
        Unit
        -> MulticastSubject MicroscopeStop
        -> Take(Count=1)
        -> WorkflowOutput
    -> Delay(DueTime=PT2S)
    -> SelectMany WaitToStartMicroscope => #10
        SubscribeSubject MicroscopeArmed
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject MicroscopeStart => #3
        ExternalizedMapping(TimeOut(DisplayName=MicroscopeTimeOut)) => #4
        #3, #4 -> SelectMany WaitForMicoscope => #5
            SubscribeSubject MicroscopeArmed
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=WaitMicroscopeTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds => #8
              Expression: TimeSpan.FromSeconds(it)
            ExternalizedMapping(Value(DisplayName=TimeOut)) => #9
            #8, #9 -> Add(Operand=TimeSpanProperty(Value=PT5S))
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S)
            -> AllenNeuralDynamics.Core.ThrowException(Message="Microscope is not responding!")
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=WaitMicroscopeTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0S, Period=PT0S) => #10
        #5, #10 -> Zip
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=WaitMicroscope)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvent
    #6 -> Condition Skip2pHandshake => #11
        WorkflowInput Source1 => #0
        SubscribeSubject Skip2pHandshake => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    #10, #11 -> Merge => #12
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=DelayAfterHandshake)
    -> PropertyMapping(DelayToStart) => #15
    #12, #15 -> SelectMany DelayStart
        SubscribeSubject BciSignal
        -> MemberSelector(Selector=Seconds)
        -> Take(Count=1) => #2
        SubscribeSubject BciSignal
        -> MemberSelector(Selector=Seconds) => #4
        #2, #4 -> CombineLatest
        -> Subtract
        -> Bonsai.Dsp.Abs => #7
        ExternalizedMapping(Value(DisplayName=DelayToStart)) => #8
        #7, #8 -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=DelayStart)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvent
    -> SelectMany Response => #17
        SubscribeSubject MoveSpoutAbsolute => #0
        SubscribeSubject ClosePosition
        -> PropertyMapping(Value) => #2
        #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=39))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ResponseLocked)
        -> MulticastSubject SoftwareEvent => #7
        SubscribeSubject ClosePosition
        -> PropertyMapping(Value) => #9
        #7, #9 -> DoubleProperty(Value=39)
        -> MulticastSubject SpoutGoToPosition
        -> BooleanProperty(Value=true) => #12
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=MaxTrialDuration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT20S, Period=PT0S)
        -> BooleanProperty(Value=false) => #18
        #12, #18 -> Merge => #19
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ResponseOutcome)
        -> MulticastSubject SoftwareEvent => #21
        #21, #19 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject MovementSignal

        GroupWorkflow TriggerAudio
            IntProperty(Value=1)
            -> Take(Count=1)
            -> MulticastSubject AudioTrigger => #2
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=EnableSoundOnRewardZoneEntry)
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            #2, #5 -> SubscribeWhen
            -> WorkflowOutput

        Annotation "Gain Notes"(Text="Considering the ADC is being acquired at 1kHz, the gain can be defined by considering a voltage of 1")
        -> SubscribeSubject PostBciSignal
        -> MemberSelector(Selector=Value) => #30
        SubscribeSubject BciGain => #31
        SubscribeSubject BciSamplingRate
        -> Bonsai.Scripting.Expressions.ExpressionTransform 1.0/it
          Expression: 1.0/it
        -> PropertyMapping(Value) => #34
        Annotation "Normalize to milliseconds"(Text="") => #35
        #31, #34, #35 -> Multiply(Operand=DoubleProperty(Value=0))
        -> PropertyMapping(RangeMax) => #37
        #30, #37 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0, RescaleType=Linear)
        -> Condition IsBciEnabled? => #39
            SubscribeSubject BciModeEnabled
            -> WorkflowOutput
        SubscribeSubject MovementSignal
        -> MemberSelector(Selector=Value) => #41
        SubscribeSubject PassiveGain => #42
        SubscribeSubject MovementSignalSamplingRate
        -> Bonsai.Scripting.Expressions.ExpressionTransform 1.0/it
          Expression: 1.0/it
        -> PropertyMapping(Value) => #45
        #42, #45 -> Multiply(Operand=DoubleProperty(Value=0))
        -> PropertyMapping(Value) => #47
        #41, #47 -> DoubleProperty(Value=0.002) => #48
        #39, #48 -> Merge
        -> Condition GateDisplacement
            SubscribeSubject GateDisplacement
            -> WorkflowOutput
        -> MulticastSubject SpoutAddDisplacement

        BooleanProperty(Value=true)
        -> BehaviorSubject GateDisplacement

        SubscribeSubject MovementSignal
        -> MemberSelector(Selector=Value) => #55
        SubscribeSubject NoMovementBaselineThreshold
        -> PropertyMapping(Value) => #57
        #55, #57 -> GreaterThan(Operand=DoubleProperty(Value=1000))
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject GateDisplacement
        -> CreateObservable WaitForFallingEdge
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=PunishOnMovementDuration)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S) => #4
            SubscribeSubject MovementSignal
            -> MemberSelector(Selector=Value) => #6
            SubscribeSubject NoMovementBaselineThreshold
            -> PropertyMapping(Value) => #8
            #6, #8 -> GreaterThan(Operand=DoubleProperty(Value=1000))
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1) => #12
            #4, #12 -> SubscribeWhen
            -> WorkflowOutput
        -> Switch
        -> BooleanProperty(Value=true)
        -> MulticastSubject GateDisplacement
    -> Condition Success?
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany WaitForLick => #19
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=WaitForLick) => #1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany WaitForLick => #3
            SubscribeSubject LickEvent
            -> BooleanProperty(Value=true) => #1
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=LickResponseTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S, Period=PT0S)
            -> BooleanProperty(Value=false) => #7
            #1, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=LickResponse)
        -> MulticastSubject SoftwareEvent => #5
        #5, #3 -> Zip
        -> MemberSelector(Selector=Item2) => #7
        #1 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #10
        #7, #10 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput

        IntProperty(Value=2)
        -> Take(Count=1)
        -> MulticastSubject AudioTrigger

        Unit
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=WaitForLick)
        -> MulticastSubject SoftwareEvent
    -> Condition IsLick
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany DeliverReward => #21
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject TriggerValve => #2
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=RewardConsumeTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #6
        #2, #6 -> Delay(DueTime=PT2S)
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Reward)
        -> MulticastSubject SoftwareEvent
    #19 -> BitwiseNot
    -> Condition IsTimeOut => #23
        WorkflowInput Source1
        -> WorkflowOutput
    #17 -> BitwiseNot
    -> Condition IsFail => #25
        WorkflowInput Source1
        -> WorkflowOutput
    #21, #23, #25 -> Merge
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TrialOutcome)
    -> MulticastSubject SoftwareEvent
    -> Take(Count=1)
    -> Repeat
SubscribeSubject EndExperiment => #15
#14, #15 -> TakeUntil => #16
SubscribeSubject StartExperiment => #17
#16, #17 -> SubscribeWhen

Defer Logging => #19
    GroupWorkflow HarpLogging
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.FilterVisibility
        -> Harp.Behavior.GroupByRegister => #2
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Behavior.harp, Extension=bin)
        -> PropertyMapping(FileName) => #4
        #2, #4 -> Bonsai.Harp.MessageWriter
          FileName=C:/Data/test-subject/20231220T155631/Behavior.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterVisibility
        -> Harp.LoadCells.GroupByRegister => #8
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=LoadCells.harp, Extension=bin)
        -> PropertyMapping(FileName) => #10
        #8, #10 -> Bonsai.Harp.MessageWriter
          FileName=C:/Data/test-subject/20231220T155631/LoadCells.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

        SubscribeSubject HarpClkGenEvents
        -> Harp.TimestampGenerator3.FilterVisibility
        -> Harp.TimestampGeneratorGen3.GroupByRegister => #14
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=TimestampGenerator.harp, Extension=bin)
        -> PropertyMapping(FileName) => #16
        #14, #16 -> Bonsai.Harp.MessageWriter
          FileName=C:/Data/test-subject/20231220T155631/TimestampGenerator.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

    GroupWorkflow Camera
        IncludeWorkflow
          Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
          SubjectName=LoggingRootPath
          LogName=Camera0
          EncodingFrameRate=400
          VideoExtension=mp4
          MetadataExtension=csv
          Codec="-vcodec h264_nvenc -crf: 23 -threads 4"
        -> Take(Count=1)
        -> AsyncSubject Camera0LoggerPath

        IncludeWorkflow
          Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
          SubjectName=LoggingRootPath
          LogName=Camera1
          EncodingFrameRate=400
          VideoExtension=mp4
          MetadataExtension=csv
          Codec="-vcodec h264_nvenc -crf: 23 -threads 4"
        -> Take(Count=1)
        -> AsyncSubject Camera1LoggerPath

        SubscribeSubject Camera0FrameEvent => #6
        SubscribeSubject Camera0LoggerPath
        -> MemberSelector(Selector=Metadata)
        -> PropertyMapping(FileName) => #9
        #6, #9 -> Bonsai.IO.CsvWriter
          FileName=C:/Data/test-subject/20231220T155631/Camera0/Metadata.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
          Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp"
        -> MemberSelector(Selector=Value.Image) => #11
        SubscribeSubject Camera0LoggerPath
        -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #13
        #11, #13 -> Bonsai.FFmpeg.VideoWriter
          FileName=C:/Data/test-subject/20231220T155631/Camera0/Video.mp4
          Suffix=None
          Overwrite=false
          FrameRate=400
          OutputArguments="-vcodec h264_nvenc -crf: 23 -threads 4"

        SubscribeSubject Camera1FrameEvent => #15
        SubscribeSubject Camera1LoggerPath
        -> MemberSelector(Selector=Metadata)
        -> PropertyMapping(FileName) => #18
        #15, #18 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
        -> MemberSelector(Selector=Value.Image) => #20
        SubscribeSubject Camera1LoggerPath
        -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #22
        #20, #22 -> Bonsai.FFmpeg.VideoWriter(FileName=C:\Users\bruno.cruz\Desktop\test.mp4, Suffix=None, Overwrite=false, FrameRate=30, OutputArguments="") => #23
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera1)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #26
        #23, #26 -> SubscribeWhen

    GroupWorkflow SoftwareEvent
        SubscribeSubject SoftwareEvent => #0
        SubscribeSubject HarpTimestampSource => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath)
        -> WorkflowOutput

    GroupWorkflow ConfigSchemaLogging
        SubscribeSubject SubjectSchema
        -> GroupWorkflow ModifySchema
            WorkflowInput Source1
            -> BciNoMovementDataSchema.BciNoMovementSession.SerializeToJson
            -> BciNoMovementDataSchema.BciNoMovementSession.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.BciNoMovementSession.BciNoMovementSession>) => #2
            SubscribeSubject Repository
            -> MemberSelector(Selector=Head.Tip.Sha) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddHash
              Expression: it.Item1.set_CommitHash(it.Item2)
            -> MemberSelector(Selector=Item1) => #7
            SubscribeSubject RngSeedValue => #8
            #7, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddRngSeedValue
              Expression: it.Item1.set_RngSeed(it.Item2)
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> BciNoMovementDataSchema.BciNoMovementSession.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Subject, DeviceName=Config, Extension=json)

        SubscribeSubject TaskLogicSchema
        -> BciNoMovementDataSchema.BciNoMovementTask.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=TaskLogic, DeviceName=Config, Extension=json)

        SubscribeSubject RigSchema
        -> BciNoMovementDataSchema.BciNoMovementRig.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Rig, DeviceName=Config, Extension=json)

    GroupWorkflow Logs
        SubscribeSubject EndExperiment
        -> StringProperty(Value=ExperimentCompleted)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
        SubscribeSubject HarpTimestampSource => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> AllenNeuralDynamics.Core.Logging.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=EndSession, DeviceName=config, Extension=json)

    GroupWorkflow Operation
        SubscribeSubject SpoutPositionInstruction => #0
        SubscribeSubject HarpTimestampSource => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogCsv.bonsai
          LogName=SpoutPosition
          DeviceName=Operation
          Extension=csv
          OmitHeader=false
          Delimiter=nil
          SubjectName=LoggingRootPath
        -> WorkflowOutput
SubscribeSubject EndExperiment
-> Delay(DueTime=PT0.5S) => #21
#19, #21 -> TakeUntil => #22
SubscribeSubject StartLogging => #23
#22, #23 -> SubscribeWhen

BehaviorSubject<System.Reactive.Unit> EndExperiment
-> Delay(DueTime=PT2S)
-> SelectMany EndRoutine
    Unit
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #4
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #8
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #10
    #8, #10 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #13
    #4, #13 -> AllenNeuralDynamics.Core.StartRobocopy => #14
      Source=C:/Data/test-subject/20231220T155230
      Destination=C:/DataRemote/test-subject/20231220T155230
      CreateLog=true
      Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee"
      ProcessWindowStyle=Normal
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #17
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    #14, #17 -> SubscribeWhen
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput

GroupWorkflow ZaberGUI
    SubscribeSubject IsHomed
    -> PropertyMapping(Enabled)
    -> AllenNeuralDynamics.Core.Design.PushButton(Label=ClosePosition, Enabled=false) => #2
    -> GroupWorkflow GetReset3dPosition
        WorkflowInput Source1 => #0
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=ManipulatorResetPosition) => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
        -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
        -> WorkflowOutput
    -> MulticastSubject Force3dManipulatorPosition
    -> GroupWorkflow ForceClosePosition
        WorkflowInput Source1 => #0
        SubscribeSubject ClosePosition
        -> PropertyMapping(Value) => #2
        #0, #2 -> FloatProperty(Value=0)
        -> WorkflowOutput
    -> MulticastSubject SpoutGoToPosition
    SubscribeSubject IsHomed
    -> PropertyMapping(Enabled)
    -> AllenNeuralDynamics.Core.Design.PushButton(Label=FarPosition, Enabled=false) => #9
    SubscribeSubject FarPosition
    -> PropertyMapping(Value) => #11
    #9, #11 -> FloatProperty(Value=0)
    -> MulticastSubject SpoutGoToPosition
    #2 -> VisualizerMapping => #14
    #9 -> VisualizerMapping => #15
    AllenNeuralDynamics.Core.Design.PushButton(Label=Home, Enabled=true)
    -> MulticastSubject HomingRoutine
    -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #18
    AllenNeuralDynamics.Core.Design.ToggleButton(Enabled=true, IsInitiallyChecked=false, CheckedLabel=Park, UncheckedLabel=Unpark)
    -> MulticastSubject ParkState
    -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.ToggleButtonVisualizer>) => #21
    #14, #15, #18, #21 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=4, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #23
    AllenNeuralDynamics.Core.Design.PushButton(Label=-X, Enabled=true) => #24
    -> VisualizerMapping => #25
    AllenNeuralDynamics.Core.Design.PushButton(Label=+X, Enabled=true) => #26
    -> VisualizerMapping => #27
    AllenNeuralDynamics.Core.Design.PushButton(Label=-Y, Enabled=true) => #28
    -> VisualizerMapping => #29
    AllenNeuralDynamics.Core.Design.PushButton(Label=+Y, Enabled=true) => #30
    -> VisualizerMapping => #31
    AllenNeuralDynamics.Core.Design.PushButton(Label=-Z, Enabled=true) => #32
    -> VisualizerMapping => #33
    AllenNeuralDynamics.Core.Design.PushButton(Label=+Z, Enabled=true) => #34
    -> VisualizerMapping => #35
    #25, #27, #29, #31, #33, #35 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #37
    AllenNeuralDynamics.Core.Design.PropertyGridSource(Enabled=true)
    -> VisualizerMapping => #39
    AllenNeuralDynamics.Core.Design.PushButton(Label=SaveNewClosePosition, Enabled=true)
    -> BehaviorSubject SaveNewClosePosition
    -> VisualizerMapping => #42
    #37, #39, #42 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
      ColumnCount=2
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=3), CellSpan(ColumnSpan=1, RowSpan=4), CellSpan(ColumnSpan=1, RowSpan=1))
    -> VisualizerMapping => #44
    #23, #44 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=0.3), RowStyle(SizeType=Percent, Height=0.7)), CellSpans="")
    -> WorkflowOutput
    #24 -> StringProperty(Value=-X) => #47
    #26 -> StringProperty(Value=+X) => #48
    #28 -> StringProperty(Value=-Y) => #49
    #30 -> StringProperty(Value=+Y) => #50
    #32 -> StringProperty(Value=-Z) => #51
    #34 -> StringProperty(Value=+Z) => #52
    #47, #48, #49, #50, #51, #52 -> Merge
    -> BehaviorSubject GuiDisplaceManipulator

    ExternalizedMapping(Value(DisplayName=X))
    -> DoubleProperty(Value=1) => #56
    ExternalizedMapping(Value(DisplayName=Y))
    -> DoubleProperty(Value=1) => #58
    ExternalizedMapping(Value(DisplayName=Z))
    -> DoubleProperty(Value=0.1) => #60
    #56, #58, #60 -> CombineLatest
    -> InputMapping(X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3)) => #62
    Source2=#62 -> Bonsai.Vision.CreatePoint3d(X=1, Y=1, Z=0.1)
    -> BehaviorSubject CurrentManipulatorDisplacements

    SubscribeSubject GuiDisplaceManipulator => #65
    SubscribeSubject CurrentManipulatorDisplacements => #66
    #65, #66 -> WithLatestFrom => #67
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetAxisAndDirection => #68
      Expression: (Item1[0] == '-' ? -1.0 : 1.0) * (Item1[1] == 'X' ? Item2.X : 0)
    #67 -> Bonsai.Scripting.Expressions.ExpressionTransform GetAxisAndDirection => #69
      Expression: (Item1[0] == '-' ? -1.0 : 1.0) * (Item1[1] == 'Y' ? Item2.Y : 0)
    #67 -> Bonsai.Scripting.Expressions.ExpressionTransform GetAxisAndDirection => #70
      Expression: (Item1[0] == '-' ? -1.0 : 1.0) * (Item1[1] == 'Z' ? Item2.Z : 0)
    #68, #69, #70 -> Zip
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
    -> Bonsai.Vision.CreatePoint3d(X=-0, Y=-0, Z=-10)
    -> SelectMany Increment
        WorkflowInput Source1 => #0
        SubscribeSubject Force3dManipulatorPosition
        -> Take(Count=1) => #2
        #0, #2 -> Zip
        -> Add
        -> WorkflowOutput
    -> MulticastSubject Force3dManipulatorPosition

    GroupWorkflow OverrideDefaultPosition
        SubscribeSubject SaveNewClosePosition => #0
        SubscribeSubject Force3dManipulatorPosition => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject TaskLogicSchema
        -> GroupWorkflow "Clone()" => #5
            WorkflowInput Source1
            -> BciNoMovementDataSchema.BciNoMovementTask.SerializeToJson
            -> BciNoMovementDataSchema.BciNoMovementTask.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.BciNoMovementTask.BciNoMovementTaskLogic>)
            -> WorkflowOutput
        #3, #5 -> WithLatestFrom
        -> MemberSelector(Selector="Item2,Item1")
        -> ModifyManipulatorResetPosition
        -> MulticastSubject TaskLogicSchema
        -> BciNoMovementDataSchema.BciNoMovementTask.SerializeToJson => #10
        SubscribeSubject TaskLogicSchemaPath
        -> PropertyMapping(Path) => #12
        #10, #12 -> Bonsai.IO.WriteAllText(Path=..\local\TaskLogic\bci_no_movement_task_logic.json, Overwrite=true, Append=false)
        -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #32
GroupWorkflow UILogic
    AllenNeuralDynamics.Core.Design.PushButton(Label="Start Session!", Enabled=true) => #0
    -> BooleanProperty(Value=true)
    -> MulticastSubject TaskRunningState => #2
    SubscribeSubject TaskRunningState
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #2, #4 -> TakeUntil
    SubscribeSubject TaskRunningState
    -> PropertyMapping(Enabled)
    -> AllenNeuralDynamics.Core.Design.PushButton(Label="Stop Session!", Enabled=false) => #8
    -> BooleanProperty(Value=false)
    -> MulticastSubject TaskRunningState
    #0 -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #11
    #8 -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #12
    #11, #12 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder StartStop(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #14
    AllenNeuralDynamics.Core.Design.ToggleButton(Enabled=true, IsInitiallyChecked=true, CheckedLabel="Bci Mode Enabled", UncheckedLabel="Movement Mode Enabled")
    -> MulticastSubject BciModeEnabled
    -> VisualizerMapping => #17
    AllenNeuralDynamics.Core.Design.ToggleButton(Enabled=true, IsInitiallyChecked=true, CheckedLabel=SkipImagingMode, UncheckedLabel=ImagingMode)
    -> MulticastSubject Skip2pHandshake
    -> VisualizerMapping => #20
    AllenNeuralDynamics.Core.Design.PushButton(Label=Water, Enabled=true)
    -> MulticastSubject TriggerValve
    -> VisualizerMapping => #23
    #17, #20, #23 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Mode(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #25
    #14, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder UILogic(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #34
GroupWorkflow Visualization
    SubscribeSubject PostBciSignal
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, Capacity=5000, Min=-0.5, Max=4)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #2
    SubscribeSubject MovementSignal => #3
    SubscribeSubject NoMovementBaselineThreshold => #4
    #3, #4 -> CombineLatest
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Item1.Seconds, ValueSelector="Item1.Value,Item2", SymbolType=None, LineWidth=2, Capacity=5000, Min=-20, Max=5000)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #7
    SubscribeSubject LoadCellData
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, Capacity=5000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #10
    SubscribeSubject Camera0FrameEvent
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #14
    SubscribeSubject Camera1FrameEvent
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #18
    SubscribeSubject SoftwareEvent => #19
    SubscribeSubject HarpTimestampSource => #20
    #19, #20 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
    -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #24
    SubscribeSubject SpoutPositionInstruction => #25
    SubscribeSubject ClosePosition => #26
    SubscribeSubject FarPosition => #27
    #25, #26, #27 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
      Expression: new(Item1 as Position, Item2 as Close, Item3 as Far)
    SubscribeSubject HarpTimestampSource => #30
    #29, #30 -> WithLatestFrom
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Item2, ValueSelector="Item1.Position,Item1.Close,Item1.Far", SymbolType=None, LineWidth=1, Capacity=5000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #33
    #2, #7, #10, #14, #18, #24, #33 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Plots(ColumnCount=2, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #36
#32, #34, #36 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
  ColumnCount=1
  RowCount=3
  ColumnStyles=""
  RowStyles(RowStyle(SizeType=Percent, Height=0.2), RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.7))
  CellSpans=""
